PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = DFv2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"you are in group " + str(cbingDFv2.group)
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    CodeComponent group_determiner
      Code Type = Auto->JS
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      Begin Experiment:
        group1_trials_reps = 0
        group2_trials_reps = 0
        group3_trials_reps = 0
        group4_trials_reps = 0
      Begin Routine:
        if str(cbingDFv2.group) == '1':
            group1_trials_reps = 1
        if str(cbingDFv2.group) == '2':
            group2_trials_reps = 1
        if str(cbingDFv2.group) == '3':
            group3_trials_reps = 1
        if str(cbingDFv2.group) == '4':
            group4_trials_reps = 1
  Routine code
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        cbFile = "resources/cb" + cbingDFv2.group + ".xlsx";
  Routine fetch_shelf
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        counterbal - await psychoJS.shelf.counterBalanceSelect({key: ['my_groups']})
  Routine training1
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    TextComponent trainingwords1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $str(word)
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    TextComponent RF_text1
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $String(R_F)
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    CodeComponent define_cb1
      Code Type = Auto->JS
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      Begin Routine:
        #cbFile = 'resources/cb1.xlsx'
        cbFile = 'resources/cb1.xlsx'
  Routine training2
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    TextComponent trainingwords2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $str(word)
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    TextComponent RF_text2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $String(R_F)
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    CodeComponent define_cb2
      Code Type = Auto->JS
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      Begin Routine:
        #cbFile2 = 'resources/cb2.xlsx'
        cbFile2 = 'resources/cb2.xlsx'
  Routine end
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    TextComponent force_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Now you have reached the end of the experiment
        The program will end automatically after you press [SPACE]
    KeyboardComponent space_to_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training3
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    TextComponent trainingwords3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $str(word)
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    TextComponent RF_text3
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $String(R_F)
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    CodeComponent define_cb3
      Code Type = Auto->JS
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      Begin Experiment:
        #cbFile3 = 'resources/cb3.xlsx'
        cbFile3 = 'resources/cb3.xlsx'
  Routine training4
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    TextComponent training_words4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $str(word)
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    TextComponent RF_text4
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $String(R_F)
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    CodeComponent define_cb4
      Code Type = Auto->JS
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      Begin Experiment:
        #cbFile4 = 'resources/cb4.xlsx'
        cbFile4 = 'resources/cb4.xlsx'
  Routine testing_phase
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    TextComponent tesing_ZMtext
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        z      ..............      m
        OLD                NEW
    KeyboardComponent testing_input
      allowedKeys = 'z','m','w','Z','M','W'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent testing_words1
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent full_stim
      Code Type = Auto->JS
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      Begin Experiment:
        DF_stimuli_full = 'resources/DF_stimuli_full.xlsx'
  Routine testing_instruction
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    TextComponent testing_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we are going to test your memory.

        You will see many words. Some of which you have seen, and some you have not seen them in the experiment. If you do not remember seeing that word in the experiment, you should say that is NEW by pressing [M] on your keyboard. However, if you remember seeing the word today, regardless of instructions to remember or forget, you should say that is OLD by pressing [Z] on your keyboard. In other words, ignore the instructions to remember or forget. As long as you remember seeing a word, you should say that it is OLD. Press [space] to begin the test.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ART_instruction
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    TextComponent text_instruct_3
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the following section you will be asked whether you recognize the name on the screen as an author. Press “Y” if you think it’s a name of an author, and “N” if you do not think it is a name of an author.
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    KeyboardComponent key_resp_instruct_3
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent text_space_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space button to continue.
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    CodeComponent code_align
      Code Type = Both
      Begin JS Routine:
        text_instruct_3.setAlignHoriz('left')
    TextboxComponent textbox_header_instruction_ART
      bold = False
      borderWidth = 1
      editable = False
      fillColor = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.3, 0.4)
      size = (0.45, 0.08)
      startVal [time (s)] = 0
      text = INSTRUCTIONS
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  Routine placeholder
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  Routine LexTALE_instruction
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    TextComponent text_instruct
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the following section you will be asked whether you know if the word is a real English word or not. Press “Y” if you think it’s a real word, and “N” if you do not think it is a real word.
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    KeyboardComponent key_resp_instruct
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent text_space
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space button to continue.
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    CodeComponent code_align_2
      Code Type = Both
      Begin JS Routine:
        text_instruct_3.setAlignHoriz('left')
    TextboxComponent textbox_header_instruction_ART_2
      bold = False
      borderWidth = 1
      editable = False
      fillColor = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.3, 0.4)
      size = (0.45, 0.08)
      startVal [time (s)] = 0
      text = INSTRUCTIONS
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  Routine ART
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    TextComponent text_LDT_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Author
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    KeyboardComponent key_resp_LDT
      allowedKeys = 'n','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent YN_text_LDT
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press
        “Y” for “Yes”
        “N” for “No”
    TextComponent question_LDT
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this an author?
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  Routine LexTALE
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    TextComponent text_LDT_stim_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp_LDT_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent YN_text_LDT_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press
        “Y” for “Yes”
        “N” for “No”
    TextComponent question_LDT_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is it a real word?
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  Routine training_instruction
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    TextComponent training_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see a variety of words.

        Each word will be followed by either the letter R or F. If you see the letter R, you should try to REMEMBER that word. If you see the letter F, you should try to FORGET seeing that word. This information will be important later in the experiment. Press [space] to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  CounterbalanceRoutine cbingDFv2
    endExperimentOnDepletion = False
    nGroups = 4
    nReps = 1
    nSlots = 25
    saveData = True
    saveRemaining = True
    specMode = uniform
  PavloviaSurveyRoutine debriefing_form
    surveyId = 65bec5d7-badf-47ff-afc0-3513a89a9fdb
    surveyType = id
  PavloviaSurveyRoutine language_background_q
    surveyId = dba4b2bd-b31b-4b67-a9ab-c842ca4251f7
    surveyType = id
  PavloviaSurveyRoutine consent_form
    surveyId = 8d7138b4-a716-4062-96b7-59485dece696
    surveyType = id
Flow
  PavloviaSurveyRoutine consent_form
  CounterbalanceRoutine cbingDFv2
  Routine code
  Routine trial
  Routine training_instruction
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = resources/cb1.xlsx
    loopType = random
    nReps = String(group1_trials_reps)
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    conditions:
      [{'ID': 1, 'word': 'LEADER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 2, 'word': 'SOFTLY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 3, 'word': 'ADDRESS', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 4, 'word': 'RIDING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 5, 'word': 'PARTNER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 6, 'word': 'POETIC', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 7, 'word': 'SLIGHT', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 8, 'word': 'SERVING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 9, 'word': 'SOLDIER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 10, 'word': 'ADVISED', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 11, 'word': 'ANGRY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 12, 'word': 'BELIEF', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 13, 'word': 'WEATHER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 14, 'word': 'GRAVE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 15, 'word': 'EMPTY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 16, 'word': 'REGION', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 17, 'word': 'SUDDEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 18, 'word': 'FLIGHT', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 19, 'word': 'BRANCH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'}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
    Routine training1
  LoopTerminator trials1
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = resources/cb2.xlsx
    loopType = random
    nReps = String(group2_trials_reps)
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    conditions:
      [{'ID': 1, 'word': 'LEADER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 2, 'word': 'SOFTLY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 3, 'word': 'ADDRESS', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 4, 'word': 'RIDING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 5, 'word': 'PARTNER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 6, 'word': 'POETIC', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 7, 'word': 'SLIGHT', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 8, 'word': 'SERVING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 9, 'word': 'SOLDIER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 10, 'word': 'ADVISED', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 11, 'word': 'ANGRY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 12, 'word': 'BELIEF', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 13, 'word': 'WEATHER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 14, 'word': 'GRAVE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 15, 'word': 'EMPTY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 16, 'word': 'REGION', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 17, 'word': 'SUDDEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 18, 'word': 'FLIGHT', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 19, 'word': 'BRANCH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'}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
    Routine training2
  LoopTerminator trials2
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = resources/cb3.xlsx
    loopType = random
    nReps = String(group3_trials_reps)
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    conditions:
      [{'ID': 1, 'word': 'DEPTH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 2, 'word': 'CLOSER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 3, 'word': 'ASSUME', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 4, 'word': 'SOMEHOW', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 5, 'word': 'QUEEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 6, 'word': 'SPEECH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 7, 'word': 'COOLING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 8, 'word': 'FARTHER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 9, 'word': 'COATING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 10, 'word': 'LISTEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 11, 'word': 'THREW', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 12, 'word': 'LIBERTY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 13, 'word': 'CUTTING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 14, 'word': 'MASTER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 15, 'word': 'LEGAL', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 16, 'word': 'EXAMINE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 17, 'word': 'SUPPER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 18, 'word': 'RURAL', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 19, 'word': 'CULTURE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'}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
    Routine training3
  LoopTerminator trials3
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = resources/cb4.xlsx
    loopType = random
    nReps = String(group4_trials_reps)
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    conditions:
      [{'ID': 1, 'word': 'DEPTH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 2, 'word': 'CLOSER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 3, 'word': 'ASSUME', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 4, 'word': 'SOMEHOW', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 5, 'word': 'QUEEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 6, 'word': 'SPEECH', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 7, 'word': 'COOLING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 8, 'word': 'FARTHER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 9, 'word': 'COATING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 10, 'word': 'LISTEN', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 11, 'word': 'THREW', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 12, 'word': 'LIBERTY', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 13, 'word': 'CUTTING', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 14, 'word': 'MASTER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 15, 'word': 'LEGAL', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 16, 'word': 'EXAMINE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 17, 'word': 'SUPPER', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'},
      {'ID': 18, 'word': 'RURAL', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'R'},
      {'ID': 19, 'word': 'CULTURE', 'easy_hard': 'easy', 'old_new': 'old', 'R_F': 'F'}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
    Routine training4
  LoopTerminator trials4
  Routine testing_instruction
  LoopInitiator testing loopType="TrialHandler"
    conditionsFile = resources/DF_stimuli_full.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ID': 1, 'word': 'LEADER', 'easy_hard': 'easy', 'KFFRQ': 74},
      {'ID': 2, 'word': 'SOFTLY', 'easy_hard': 'easy', 'KFFRQ': 31},
      {'ID': 3, 'word': 'ADDRESS', 'easy_hard': 'easy', 'KFFRQ': 77},
      {'ID': 4, 'word': 'RIDING', 'easy_hard': 'easy', 'KFFRQ': 45},
      {'ID': 5, 'word': 'PARTNER', 'easy_hard': 'easy', 'KFFRQ': 32},
      {'ID': 6, 'word': 'POETIC', 'easy_hard': 'easy', 'KFFRQ': 31},
      {'ID': 7, 'word': 'SLIGHT', 'easy_hard': 'easy', 'KFFRQ': 53},
      {'ID': 8, 'word': 'SERVING', 'easy_hard': 'easy', 'KFFRQ': 38},
      {'ID': 9, 'word': 'SOLDIER', 'easy_hard': 'easy', 'KFFRQ': 39},
      {'ID': 10, 'word': 'ADVISED', 'easy_hard': 'easy', 'KFFRQ': 33},
      {'ID': 11, 'word': 'ANGRY', 'easy_hard': 'easy', 'KFFRQ': 45},
      {'ID': 12, 'word': 'BELIEF', 'easy_hard': 'easy', 'KFFRQ': 64},
      {'ID': 13, 'word': 'WEATHER', 'easy_hard': 'easy', 'KFFRQ': 69},
      {'ID': 14, 'word': 'GRAVE', 'easy_hard': 'easy', 'KFFRQ': 33},
      {'ID': 15, 'word': 'EMPTY', 'easy_hard': 'easy', 'KFFRQ': 64},
      {'ID': 16, 'word': 'REGION', 'easy_hard': 'easy', 'KFFRQ': 76},
      {'ID': 17, 'word': 'SUDDEN', 'easy_hard': 'easy', 'KFFRQ': 38},
      {'ID': 18, 'word': 'FLIGHT', 'easy_hard': 'easy', 'KFFRQ': 46},
      {'ID': 19, 'word': 'BRANCH', 'easy_hard': 'easy', 'KFFRQ': 33},
      {'ID': 20, 'word': 'BURNING', 'easy_hard': 'easy', 'KFFRQ': 50},
      {'ID': 21, 'word': 'SHOCK', 'easy_hard': 'easy', 'KFFRQ': 31},
      {'ID': 22, 'word': 'ENTER', 'easy_hard': 'easy', 'KFFRQ': 78},
      {'ID': 23, 'word': 'DECLINE', 'easy_hard': 'easy', 'KFFRQ': 31},
      {'ID': 24, 'word': 'LEADING', 'easy_hard': 'easy', 'KFFRQ': 68}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
    Routine testing_phase
  LoopTerminator testing
  Routine ART_instruction
  LoopInitiator ART_trials loopType="TrialHandler"
    conditionsFile = resources/ART_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'Author': 'Saul Bellow', 'real': 'Y'},
      {'Index': 2, 'Author': 'Thomas Pynchon', 'real': 'Y'},
      {'Index': 3, 'Author': 'Bernard Malamud', 'real': 'Y'},
      {'Index': 4, 'Author': 'Willa Cather', 'real': 'Y'},
      {'Index': 5, 'Author': 'Virginia Woolf', 'real': 'Y'},
      {'Index': 6, 'Author': 'Gabriel Garcia Marquez', 'real': 'Y'},
      {'Index': 7, 'Author': 'Kurt Vonnegut', 'real': 'Y'},
      {'Index': 8, 'Author': 'J.D. Salinger', 'real': 'Y'},
      {'Index': 9, 'Author': 'Ernest Hemingway', 'real': 'Y'},
      {'Index': 10, 'Author': 'F. Scott Fitzgerald', 'real': 'Y'},
      {'Index': 11, 'Author': 'Vladimir Nabokov', 'real': 'Y'},
      {'Index': 12, 'Author': 'Salman Rushdie', 'real': 'Y'},
      {'Index': 13, 'Author': 'Kazuo Ishiguro', 'real': 'Y'},
      {'Index': 14, 'Author': 'William Faulkner', 'real': 'Y'},
      {'Index': 15, 'Author': 'Margaret Atwood', 'real': 'Y'},
      {'Index': 16, 'Author': 'Ayn Rand', 'real': 'Y'},
      {'Index': 17, 'Author': 'James Joyce', 'real': 'Y'},
      {'Index': 18, 'Author': 'Joyce Carol Oates', 'real': 'Y'},
      {'Index': 19, 'Author': 'Nora Ephron', 'real': 'Y'},
      {'Index': 20, 'Author': 'Michael Ondaatje', 'real': 'Y'},
      {'Index': 21, 'Author': 'Toni Morrison', 'real': 'Y'},
      {'Index': 22, 'Author': 'T.S. Elliot', 'real': 'Y'},
      {'Index': 23, 'Author': 'Harper Lee', 'real': 'Y'},
      {'Index': 24, 'Author': 'George Orwell', 'real': 'Y'},
      {'Index': 25, 'Author': 'Isabel Allende', 'real': 'Y'},
      {'Index': 26, 'Author': 'Ralph Ellison', 'real': 'Y'},
      {'Index': 27, 'Author': 'Danielle Steel', 'real': 'Y'},
      {'Index': 28, 'Author': 'Maya Angelou', 'real': 'Y'}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
    Routine ART
  LoopTerminator ART_trials
  Routine LexTALE_instruction
  LoopInitiator LexTALE_trials loopType="TrialHandler"
    conditionsFile = resources/lextale_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'Word': 'platery', 'Real': 'N'},
      {'Index': 2, 'Word': 'denial', 'Real': 'Y'},
      {'Index': 3, 'Word': 'generic', 'Real': 'Y'},
      {'Index': 4, 'Word': 'mensible', 'Real': 'N'},
      {'Index': 5, 'Word': 'scornful', 'Real': 'Y'},
      {'Index': 6, 'Word': 'stoutly', 'Real': 'Y'},
      {'Index': 7, 'Word': 'ablaze', 'Real': 'Y'},
      {'Index': 8, 'Word': 'kermshaw', 'Real': 'N'},
      {'Index': 9, 'Word': 'moonlit', 'Real': 'Y'},
      {'Index': 10, 'Word': 'lofty', 'Real': 'Y'},
      {'Index': 11, 'Word': 'hurricane', 'Real': 'Y'},
      {'Index': 12, 'Word': 'flaw', 'Real': 'Y'},
      {'Index': 13, 'Word': 'alberation', 'Real': 'N'},
      {'Index': 14, 'Word': 'unkempt', 'Real': 'Y'},
      {'Index': 15, 'Word': 'breeding', 'Real': 'Y'},
      {'Index': 16, 'Word': 'festivity', 'Real': 'Y'},
      {'Index': 17, 'Word': 'screech', 'Real': 'Y'},
      {'Index': 18, 'Word': 'savoury', 'Real': 'Y'},
      {'Index': 19, 'Word': 'plaudate', 'Real': 'N'},
      {'Index': 20, 'Word': 'shin', 'Real': 'Y'},
      {'Index': 21, 'Word': 'fluid', 'Real': 'Y'},
      {'Index': 22, 'Word': 'spaunch', 'Real': 'N'},
      {'Index': 23, 'Word': 'allied', 'Real': 'Y'},
      {'Index': 24, 'Word': 'slain', 'Real': 'Y'},
      {'Index': 25, 'Word': 'recipient', 'Real': 'Y'},
      {'Index': 26, 'Word': 'exprate', 'Real': 'N'},
      {'Index': 27, 'Word': 'eloquence', 'Real': 'Y'},
      {'Index': 28, 'Word': 'cleanliness', 'Real': 'Y'},
      {'Index': 29, 'Word': 'dispatch', 'Real': 'Y'},
      {'Index': 30, 'Word': 'rebondicate', 'Real': 'N'},
      {'Index': 31, 'Word': 'ingenious', 'Real': 'Y'},
      {'Index': 32, 'Word': 'bewitch', 'Real': 'Y'},
      {'Index': 33, 'Word': 'skave', 'Real': 'N'}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
    Routine LexTALE
  LoopTerminator LexTALE_trials
  PavloviaSurveyRoutine language_background_q
  PavloviaSurveyRoutine debriefing_form
  Routine end
